<MorpheusModel version="3">
    <Description>
        <Title>GSCN-CellSorting</Title>
        <Details></Details>
    </Description>
    <Space>
        <SpaceSymbol symbol="l"/>
        <Lattice class="square">
            <Size symbol="size" value="200, 200, 0"/>
            <BoundaryConditions>
                <Condition boundary="x" type="periodic"/>
                <Condition boundary="y" type="periodic"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>4</Order>
            </Neighborhood>
        </Lattice>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="50000"/>
        <SaveInterval value="0"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <CellTypes>
        <CellType class="biological" name="ct1">
            <VolumeConstraint target="100" strength="1.0"/>
        </CellType>
        <CellType class="biological" name="ct2">
            <VolumeConstraint target="100" strength="1.0"/>
        </CellType>
        <CellType class="medium" name="medium"/>
    </CellTypes>
    <CPM>
        <Interaction>
            <Contact type1="ct1" type2="ct1" value="5"/>
            <Contact type1="ct2" type2="ct2" value="5"/>
            <Contact type1="ct1" type2="ct2" value="5"/>
            <Contact type1="ct1" type2="medium" value="10"/>
            <Contact type1="ct2" type2="medium" value="10"/>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics temperature="1"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>3</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population size="0" type="ct1">
            <InitCircle mode="random" number-of-cells="50">
                <Dimensions radius="50" center="100, 100, 0"/>
            </InitCircle>
        </Population>
        <Population size="0" type="ct2">
            <InitCircle mode="random" number-of-cells="50">
                <Dimensions radius="50" center="100, 100, 0"/>
            </InitCircle>
        </Population>
    </CellPopulations>
    <Analysis>
        <Gnuplotter time-step="100" decorate="false">
            <Terminal size="400 400 0" name="png"/>
            <Plot>
                <Cells value="cell.type"/>
            </Plot>
        </Gnuplotter>
    </Analysis>
</MorpheusModel>
