<MorpheusModel version="3">
    <Description>
        <Title>GSCN-Nanog-colonies</Title>
        <Details></Details>
    </Description>
    <Space>
        <Lattice class="square">
            <Size symbol="size" value="512, 512, 0"/>
            <BoundaryConditions>
                <Condition boundary="-x" type="constant"/>
                <Condition boundary="-y" type="constant"/>
                <Condition boundary="x" type="constant"/>
                <Condition boundary="x" type="constant"/>
            </BoundaryConditions>
            <NodeLength unit="micron" value="1"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="2880"/>
        <TimeSymbol symbol="time" name="Time"/>
        <RandomSeed value="123456789"/>
    </Time>
    <CellTypes>
        <CellType class="medium" name="LIF_serum">
            <Property symbol="N" value="0"/>
        </CellType>
        <CellType class="biological" name="mESC">
            <Property symbol="N" value="15" name="Nanog"/>
            <Property symbol="Nn" value="0"/>
            <VolumeConstraint target="110" strength="1"/>
            <SurfaceConstraint target="1.0" mode="aspherity" strength="1"/>
            <System solver="heun" time-scaling="1" time-step="0.1">
                <Constant symbol="b" value="0.08" name="basal transcription rate"/>
                <Constant symbol="s" value="14" name="autoregulatory transcription rate"/>
                <Constant symbol="d" value="1" name="degradation rate"/>
                <Constant symbol="k" value="10" name="binding rate"/>
                <Constant symbol="sig_N" value="0.70" name="noise_nanog"/>
                <DiffEqn symbol-ref="N">
                    <Expression>b + (s*N^2)/(k+N^2) - d*N + sig_N*rand_norm(0,1)*N</Expression>
                </DiffEqn>
            </System>
            <Function symbol="N_log">
                <Expression>log10(N)</Expression>
            </Function>
            <Property symbol="cell" value="1"/>
            <CellDivision write-log="newick" division-plane="random">
                <Condition>if(N>1,
  rand_uni(0,1)&lt;9.6667e-4,
  rand_uni(0,1)&lt;5.6667e-4
  )</Condition>
                <Triggers/>
            </CellDivision>
            <CellDeath>
                <Condition>rand_uni(0,1) &lt; 2.0e-4</Condition>
            </CellDeath>
            <NeighborhoodReporter>
                <Input scaling="length" value="N"/>
                <Output symbol-ref="Nn" mapping="average"/>
            </NeighborhoodReporter>
            <!--    <Disabled>
        <NeighborhoodReporter>
            <Input scaling="length" value=""/>
            <Output symbol-ref="cell.id" mapping="average"/>
        </NeighborhoodReporter>
    </Disabled>
-->
        </CellType>
    </CellTypes>
    <CPM>
        <Interaction>
            <Contact type1="mESC" type2="mESC" value="20">
                <HomophilicAdhesion strength="-25" adhesive="N_log"/>
            </Contact>
            <Contact type1="mESC" type2="LIF_serum" value="0"/>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics temperature="10"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>3</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population size="0" type="mESC">
            <InitProperty symbol-ref="N">
                <Expression>if(rand_uni(0,1)&lt;=0.75,14,0.1)</Expression>
            </InitProperty>
            <InitRectangle mode="random" number-of-cells="100">
                <Dimensions size="500, 500, 0" origin="0, 0, 0"/>
            </InitRectangle>
        </Population>
    </CellPopulations>
    <Analysis>
        <Gnuplotter time-step="100">
            <Terminal name="png"/>
            <Plot>
                <Cells value="N_log" min="-1" max="2">
                    <ColorMap>
                        <Color value="2" color="red"/>
                        <Color value="-1.5" color="white"/>
                    </ColorMap>
                </Cells>
            </Plot>
        </Gnuplotter>
        <Logger time-step="60">
            <Input>
                <Symbol symbol-ref="N"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <HistogramLogger normalized="false" logarithmic-bins="true" time-step="200" number-of-bins="20">
            <Plot minimum="0.0" terminal="png"/>
            <Column symbol-ref="N" celltype="mESC"/>
        </HistogramLogger>
        <Function symbol="log_N">
            <Expression>log10(N)</Expression>
        </Function>
    </Analysis>
    <Global>
        <Constant symbol="N" value="0.0"/>
        <Constant symbol="N_log" value="0.0"/>
    </Global>
</MorpheusModel>
